PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = omr-builder
  keyboardBackend = ioHub
  runMode = 0
  winBackend = pygame
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Routines
  Routine trial
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    RadialStimComponent radial
      angularCycles = 12
      angularPhase = 0
      color = $[1,1,1]
      colorSpace = rgb
      contrast = 1.0
      interpolate = Linear
      opacity = 1
      ori [set every frame] = 10*t
      pos = (0, 0)
      radialCycles = 0
      radialPhase = 0
      size = 3
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      syncScreenRefresh = True
      tex = sqrXsqr
      texture resolution = 256
      units = deg
      visibleWedge = (0, 360)
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  Routine static
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    RadialStimComponent radial_2
      angularCycles = 12
      angularPhase = 0
      color = $[1,1,1]
      colorSpace = rgb
      contrast = 1.0
      interpolate = Linear
      opacity = 1
      ori = 0
      pos = (0, 0)
      radialCycles = 0
      radialPhase = 0
      size = 3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      syncScreenRefresh = True
      tex = sqrXsqr
      texture resolution = 256
      units = deg
      visibleWedge = (0, 360)
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  Routine pause
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    GratingComponent grating
      color = 0.0039, 0.0039, 0.0039
      size = 3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      tex = sin
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  Routine reverse
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    RadialStimComponent radial_3
      angularCycles = 12
      angularPhase = 0
      color = $[1,1,1]
      colorSpace = rgb
      contrast = 1.0
      interpolate = Linear
      opacity = 1
      ori [set every frame] = -10*t
      pos = (0, 0)
      radialCycles = 0
      radialPhase = 0
      size = 3
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 30
      syncScreenRefresh = True
      tex = sqrXsqr
      texture resolution = 256
      units = deg
      visibleWedge = (0, 360)
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Flow
  Routine static
  Routine trial
  Routine pause
  Routine reverse
